<?xml version='1.0'?>
<model cmeta:id="hai" name="hai" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="nanometre">
        <unit prefix="nano" units="metre"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="second"/>
    </units>
    <component name="environment">
        <variable name="time" public_interface="out" units="second"/>
    </component>
    <component cmeta:id="M" name="M">
        <variable initial_value="1.0" name="M" public_interface="out" units="dimensionless"/>
        <variable name="AM" public_interface="in" units="dimensionless"/>
        <variable name="Mp" public_interface="in" units="dimensionless"/>
        <variable name="k1" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k2" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k7" public_interface="in" units="first_order_rate_constant"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>M</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci>k1</ci>
                        </apply>
                        <ci>M</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k2</ci>
                        <ci>Mp</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k7</ci>
                        <ci>AM</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="Mp" name="Mp">
        <variable initial_value="0.0" name="Mp" public_interface="out" units="dimensionless"/>
        <variable name="AMp" public_interface="in" units="dimensionless"/>
        <variable name="M" public_interface="in" units="dimensionless"/>
        <variable name="k1" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k2" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k3" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k4" public_interface="in" units="first_order_rate_constant"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Mp</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k4</ci>
                            <ci>AMp</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k1</ci>
                            <ci>M</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>k2</ci>
                            <ci>k3</ci>
                        </apply>
                        <ci>Mp</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="AMp" name="AMp">
        <variable initial_value="0.0" name="AMp" public_interface="out" units="dimensionless"/>
        <variable name="Mp" public_interface="in" units="dimensionless"/>
        <variable name="AM" public_interface="in" units="dimensionless"/>
        <variable name="k5" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k6" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k3" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k4" public_interface="in" units="first_order_rate_constant"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>AMp</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k3</ci>
                            <ci>Mp</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k6</ci>
                            <ci>AM</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>k5</ci>
                            <ci>k4</ci>
                        </apply>
                        <ci>AMp</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="AM" name="AM">
        <variable initial_value="0.0" name="AM" public_interface="out" units="dimensionless"/>
        <variable name="AMp" public_interface="in" units="dimensionless"/>
        <variable name="k5" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k6" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k7" public_interface="in" units="first_order_rate_constant"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>AM</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k5</ci>
                        <ci>AMp</ci>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>k6</ci>
                            <ci>k7</ci>
                        </apply>
                        <ci>AM</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="phosphorylation" name="phosphorylation">
        <variable name="phosphorylation" units="dimensionless"/>
        <variable name="AMp" public_interface="in" units="dimensionless"/>
        <variable name="Mp" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>phosphorylation</ci>
                <apply>
                    <plus/>
                    <ci>AMp</ci>
                    <ci>Mp</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="stress" name="stress">
        <variable name="stress" public_interface="out" units="dimensionless"/>
        <variable name="AMp" public_interface="in" units="dimensionless"/>
        <variable name="AM" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>stress</ci>
                <apply>
                    <plus/>
                    <ci>AMp</ci>
                    <ci>AM</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="model_parameters">
        <variable name="k1" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="0.5" name="k2" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="0.5" name="k5" public_interface="out" units="first_order_rate_constant"/>
        <variable name="k6" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="0.4" name="k3" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="0.1" name="k4" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="0.01" name="k7" public_interface="out" units="first_order_rate_constant"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="k1_calculation">
                <eq/>
                <ci>k1</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="first_order_rate_constant">0.55</cn>
                        <apply>
                            <and/>
                            <apply>
                                <geq/>
                                <ci>time</ci>
                                <cn cellml:units="second">0.0</cn>
                            </apply>
                            <apply>
                                <lt/>
                                <ci>time</ci>
                                <cn cellml:units="second">5.0</cn>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="first_order_rate_constant">0.3</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply id="k6_calculation">
                <eq/>
                <ci>k6</ci>
                <ci>k1</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="model_parameters" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="M" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="Mp" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="AMp" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="AM" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="M" component_2="model_parameters"/>
        <map_variables variable_1="k7" variable_2="k7"/>
        <map_variables variable_1="k1" variable_2="k1"/>
        <map_variables variable_1="k2" variable_2="k2"/>
    </connection>
    <connection>
        <map_components component_1="Mp" component_2="model_parameters"/>
        <map_variables variable_1="k4" variable_2="k4"/>
        <map_variables variable_1="k3" variable_2="k3"/>
        <map_variables variable_1="k2" variable_2="k2"/>
        <map_variables variable_1="k1" variable_2="k1"/>
    </connection>
    <connection>
        <map_components component_1="AMp" component_2="model_parameters"/>
        <map_variables variable_1="k5" variable_2="k5"/>
        <map_variables variable_1="k6" variable_2="k6"/>
        <map_variables variable_1="k4" variable_2="k4"/>
        <map_variables variable_1="k3" variable_2="k3"/>
    </connection>
    <connection>
        <map_components component_1="AM" component_2="model_parameters"/>
        <map_variables variable_1="k5" variable_2="k5"/>
        <map_variables variable_1="k6" variable_2="k6"/>
        <map_variables variable_1="k7" variable_2="k7"/>
    </connection>
    <connection>
        <map_components component_1="AM" component_2="M"/>
        <map_variables variable_1="AM" variable_2="AM"/>
    </connection>
    <connection>
        <map_components component_1="AM" component_2="AMp"/>
        <map_variables variable_1="AMp" variable_2="AMp"/>
        <map_variables variable_1="AM" variable_2="AM"/>
    </connection>
    <connection>
        <map_components component_1="M" component_2="Mp"/>
        <map_variables variable_1="M" variable_2="M"/>
        <map_variables variable_1="Mp" variable_2="Mp"/>
    </connection>
    <connection>
        <map_components component_1="Mp" component_2="AMp"/>
        <map_variables variable_1="Mp" variable_2="Mp"/>
        <map_variables variable_1="AMp" variable_2="AMp"/>
    </connection>
    <connection>
        <map_components component_1="phosphorylation" component_2="AMp"/>
        <map_variables variable_1="AMp" variable_2="AMp"/>
    </connection>
    <connection>
        <map_components component_1="phosphorylation" component_2="Mp"/>
        <map_variables variable_1="Mp" variable_2="Mp"/>
    </connection>
    <connection>
        <map_components component_1="stress" component_2="AMp"/>
        <map_variables variable_1="AMp" variable_2="AMp"/>
    </connection>
    <connection>
        <map_components component_1="stress" component_2="AM"/>
        <map_variables variable_1="AM" variable_2="AM"/>
    </connection>
    <documentation xmlns="http://cellml.org/tmp-documentation">
        <article xmlns="http://cellml.org/tmp-documentation">
            <articleinfo xmlns="http://cellml.org/tmp-documentation">
                <title xmlns="http://cellml.org/tmp-documentation">Cross-bridge phosphorylation and regulation of latch state in smooth muscle</title>
                <author xmlns="http://cellml.org/tmp-documentation">
                    <firstname xmlns="http://cellml.org/tmp-documentation">Catherine</firstname>
                    <surname xmlns="http://cellml.org/tmp-documentation">Lloyd</surname>
                    <affiliation xmlns="http://cellml.org/tmp-documentation">
                        <shortaffil xmlns="http://cellml.org/tmp-documentation">Auckland Bioengineering Institute, The University of Auckland</shortaffil>
                    </affiliation>
                </author>
            </articleinfo>
            <section xmlns="http://cellml.org/tmp-documentation" id="sec_status">
                <title xmlns="http://cellml.org/tmp-documentation">Model Status</title>
                <para xmlns="http://cellml.org/tmp-documentation">&#xd;
        This CellML model runs in both OpenCell and COR to replicate the published results (figure 6a). The units have been checked and they are consistent.&#xd;
          </para>
            </section>
            <sect1 xmlns="http://cellml.org/tmp-documentation" id="sec_structure">
                <title xmlns="http://cellml.org/tmp-documentation">Model Structure</title>
                <para xmlns="http://cellml.org/tmp-documentation">&#xd;
ABSTRACT: We have developed a minimum kinetic model for cross-bridge interactions with the thin filament in smooth muscle. The model hypothesizes two types of cross-bridge interactions: 1) cycling phosphorylated cross bridges and 2) noncycling dephosphorylated cross bridges ("latch bridges"). The major assumptions are that 1) Ca2+-dependent myosin phosphorylation is the only postulated regulatory mechanism, 2) each myosin head acts independently, and 3) latch bridges are formed by dephosphorylation of an attached cross bridge. Rate constants were resolved by fitting data on the time courses of myosin phosphorylation and stress development. Comparison of the rate constants indicates that latch-bridge detachment is the rate-limiting step. Model simulations predicted a hyperbolic dependence of steady-state stress on myosin phosphorylation, which corresponded with the experimental observation of high values of stress with low levels of phosphorylation in intact tissues. Model simulations also predicted the experimental observation that an initial phosphorylation transient only accelerates stress development, with no effect on the final steady-state levels of stress. Because the only Ca2+-dependent regulatory mechanism in this model was activation of myosin light chain kinase, these results are consistent with the hypothesis that myosin phosphorylation is both necessary and sufficient for the development of the latch state.&#xd;
</para>
                <para xmlns="http://cellml.org/tmp-documentation">&#xd;
The original paper reference is cited below:&#xd;
</para>
                <para xmlns="http://cellml.org/tmp-documentation">&#xd;
Cross-bridge phosphorylation and regulation of latch state in smooth muscle, Hai CM, Murphy RA, 1988, <emphasis xmlns="http://cellml.org/tmp-documentation">American Journal of Physiology</emphasis>, 254, C99-C106. <ulink xmlns="http://cellml.org/tmp-documentation" url="http://www.ncbi.nlm.nih.gov/pubmed/3337223">PubMed ID: 3337223</ulink>
                </para>
                <informalfigure xmlns="http://cellml.org/tmp-documentation" float="0" id="fig_reaction_diagram">
                    <mediaobject xmlns="http://cellml.org/tmp-documentation">
                        <imageobject xmlns="http://cellml.org/tmp-documentation">
                            <objectinfo xmlns="http://cellml.org/tmp-documentation">
                                <title xmlns="http://cellml.org/tmp-documentation">reaction diagram</title>
                            </objectinfo>
                            <imagedata xmlns="http://cellml.org/tmp-documentation" fileref="hai_1988.png"/>
                        </imageobject>
                    </mediaobject>
                    <caption xmlns="http://cellml.org/tmp-documentation">Hai and Murphy's four-state model: the latch regulatory scheme for Ca<superscript xmlns="http://cellml.org/tmp-documentation">2+</superscript>-dependent smooth muscle activation and Huxley's slidin filament model.  A represents the actin filament, M represents detached myosin, Mp is detached, phosphorylated myosin, AM is the actin-myosin complex, and AMp is the phosphorylated actin-myosin complex.</caption>
                </informalfigure>
            </sect1>
        </article>
    </documentation>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="">
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Lloyd</vCard:Family>
                    <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine</vCard:Given>
                    <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">May</vCard:Other>
                </vCard:N>
                <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">c.lloyd@auckland.ac.nz</rdf:value>
                    <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://imc.org/vCard/3.0#internet"/>
                </vCard:EMAIL>
                <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <vCard:Orgname xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The University of Auckland</vCard:Orgname>
                    <vCard:Orgunit xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Auckland Bioengineering Institute</vCard:Orgunit>
                </vCard:ORG>
            </dc:creator>
            <dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2010-08-09</dcterms:W3CDTF>
            </dcterms:created>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#hai_1988">
            <cmeta:bio_entity xmlns:cmeta="http://www.cellml.org/metadata/1.0#">smooth muscle</cmeta:bio_entity>
            <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <bqs:subject_type xmlns:bqs="http://www.cellml.org/bqs/1.0#">keyword</bqs:subject_type>
                    <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                        <rdf:Bag xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">myosin</rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">cross bridge</rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">myofilament mechanics</rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">smooth muscle</rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">contraction</rdf:li>
                        </rdf:Bag>
                    </rdf:value>
                </dc:subject>
            </bqs:reference>
            <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">3337223</bqs:Pubmed_id>
                <bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
                        <rdf:Seq xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:parseType="Resource">
                                <bqs:Person xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                                    <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                                        <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Hai</vCard:Family>
                                        <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">C-M</vCard:Given>
                                    </vCard:N>
                                </bqs:Person>
                            </rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:parseType="Resource">
                                <bqs:Person xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                                    <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                                        <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Murphy</vCard:Family>
                                        <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">R</vCard:Given>
                                        <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">A</vCard:Other>
                                    </vCard:N>
                                </bqs:Person>
                            </rdf:li>
                        </rdf:Seq>
                    </dc:creator>
                    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">&#xd;
            Cross-bridge phosphorylation and regulation of latch state in smooth muscle&#xd;
          </dc:title>
                    <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                        <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">1988-01</dcterms:W3CDTF>
                    </dcterms:issued>
                    <bqs:Journal xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">American Journal of Physiology</dc:title>
                    </bqs:Journal>
                    <bqs:volume xmlns:bqs="http://www.cellml.org/bqs/1.0#">254</bqs:volume>
                    <bqs:first_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">C99</bqs:first_page>
                    <bqs:last_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">C106</bqs:last_page>
                </bqs:JournalArticle>
            </bqs:reference>
        </rdf:Description>
    </rdf:RDF>
</model>
